{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "header_series": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {}
        }
    }, 
    "cfgformat": "20180910", 
    "comments": {
        "author": "Arnold Schilham, UMCU", 
        "creator": "generate_config_json.py version 20180912", 
        "description": "MR/PIQT for Philips Panorama HFO 1.0T receive/transmit=SENSE-Head-8/B", 
        "specfiles": "S: p10r2v6l3_02_l01_nt.spec, C: p10r2v6l3_02_l13_nt.cust", 
        "version": "20181105"
    }, 
    "info": {
        "acqdatetime": {
            "params": {}
        }, 
        "header_series": {
            "params": {}
        }, 
        "qc_series": {
            "params": {}
        }
    }
}